CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Merge
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Merge
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):40,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:OrigGreen
    Name the primary objects to be identified:Bacteria
    Typical diameter of objects, in pixel units (Min,Max):1,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureImageAreaOccupied:[module_num:8|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Bacteria, Cells

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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